PsychoPy2experiment version="3.1.2"
Settings
  Experiment info = {u'Gender (f/m)': u'', u'Age': u'', u'participant': u'', u'Ethnic': u''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1366, 768]
  color = $[1,1,1]
  expName = PRACTICE_OneBack_Digits
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Routines
  Routine Block3
    TextComponent Fixation_3
      color = black
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent Stimulus_3
      color = black
      letterHeight = 0.12
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $Stim
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    KeyboardComponent StimResp_3
      allowedKeys = 'v','n'
      correctAns = $CorrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      storeCorrect = True
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    CodeComponent code_3
      Code Type = Py
      End Routine:
        NoRESP = 0
        nCorr_fault = 0
        NoRESP_fault = 0
        StimRespCorr = trials3.data['StimResp_3.corr']
        StimRespRT = trials3.data['StimResp_3.keys']

        for i in StimRespRT:
            if not i:
                NoRESP = NoRESP + 1

        temp_NoResp = StimRespRT[0]
        #for k in temp_NoResp:
        #    if not k:
        #        NoRESP_fault = 0
        #    else:
        #        NoRESP_fault = 1
        if temp_NoResp > 0:
            NoRESP_fault = 0
        else:
            NoRESP_fault = 1

        nMissed = NoRESP - NoRESP_fault

        nCorr = trials3.data['StimResp_3.corr'].sum() #.std(), .mean() also available

        temp_nCorr = StimRespCorr[0]
        #for j in temp_nCorr:
        #   if j == 1:
        #        nCorr_fault = 1
        if temp_nCorr == 1:
            nCorr_fault = 1
        else:
            nCorr_fault = 0

        nCorr = nCorr - nCorr_fault

        nWrong = 24-nMissed-nCorr

        HitRate = (nCorr)/24*100

        msg = " Correct Trials = %i trials \n Wrong Trials = %i \n Missed trials = %i \n Hit rate = %.2f" %(nCorr, nWrong, nMissed, HitRate)
        #msg = " Correct Trials = %i trials \n Wrong Trials = %i \n Hit rate = %.2f" %(nCorr, nWrong, HitRate)
  Routine Block2
    TextComponent Fixation_2
      color = black
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent Stimulus_2
      color = black
      letterHeight = 0.12
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $Stim
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    KeyboardComponent StimResp_2
      allowedKeys = 'v','n'
      correctAns = $CorrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      storeCorrect = True
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    CodeComponent code_4
      Code Type = Py
      End Routine:
        NoRESP = 0
        nCorr_fault = 0
        NoRESP_fault = 0
        StimRespCorr = trials2.data['StimResp_2.corr']
        StimRespRT = trials2.data['StimResp_2.keys']

        for i in StimRespRT:
            if not i:
                NoRESP = NoRESP + 1

        temp_NoResp = StimRespRT[0]
        #for k in temp_NoResp:
        #    if not k:
        #        NoRESP_fault = 0
        #    else:
        #        NoRESP_fault = 1
        if temp_NoResp > 0:
            NoRESP_fault = 0
        else:
            NoRESP_fault = 1

        nMissed = NoRESP - NoRESP_fault

        nCorr = trials2.data['StimResp_2.corr'].sum() #.std(), .mean() also available

        temp_nCorr = StimRespCorr[0]
        #for j in temp_nCorr:
        #   if j == 1:
        #        nCorr_fault = 1
        if temp_nCorr == 1:
            nCorr_fault = 1
        else:
            nCorr_fault = 0

        nCorr = nCorr - nCorr_fault

        nWrong = 24-nMissed-nCorr

        HitRate = (nCorr)/24*100
        PartiNum = expInfo['participant']
        PartiNum = int(PartiNum)

        check = PartiNum%2

        if check == 0:
            nCorr = nWrong
            nWrong = 22-nMissed-nCorr
            HitRate = (nCorr)/22*100

        msg = " Correct Trials = %i trials \n Wrong Trials = %i \n Missed trials = %i \n Hit rate = %.2f" %(nCorr, nWrong, nMissed, HitRate)
        #msg = " Correct Trials = %i trials \n Wrong Trials = %i \n Hit rate = %.2f" %(nCorr, nWrong, HitRate)
  Routine Block1
    EnvGratingComponent Background_3
      beat = False
      carrier = None
      color = $[-1.000,-1.000,-1.000]
      contrast = 0.5
      envelope = sin
      envori = 0.0
      envphase = 0.0
      envsf = 1.0
      moddepth = 1.0
      saveStartStop = False
      sf = 1.0
      size = (20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      units = norm
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    TextComponent Fixation
      color = $[1.000,1.000,1.000]
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    SoundComponent Stimulus
      sound [set every repeat] = $Stim
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.75
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    KeyboardComponent StimResp
      allowedKeys = 'v','n'
      correctAns = $CorrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      storeCorrect = True
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        #nCorr = trials.data['StimResp.corr'].sum() #.std(), .mean() also available
        #meanRt = trials.data['StimResp.rt'].mean()
        #msg = "You got %i trials correct (rt=%.2f)" %(nCorr,meanRt)
      End Experiment:
        print(PartiNum)
      End Routine:
        NoRESP = 0
        nCorr_fault = 0
        NoRESP_fault = 0
        StimRespCorr = trials.data['StimResp.corr']
        StimRespRT = trials.data['StimResp.keys']

        for i in StimRespRT:
            if not i:
                NoRESP = NoRESP + 1

        #test for Non-numeric values & convert them to 0 for first trial
        temp_NoResp = StimRespRT[0]

        if temp_NoResp == None:
            temp_NoResp = 0
        else:
            temp_NoResp = temp_NoResp
        #for k in temp_NoResp:
        #    if not k:
        #        NoRESP_fault = 0
        #    else:
        #        NoRESP_fault = 1
        if temp_NoResp > 0:
            NoRESP_fault = 0
        else:
            NoRESP_fault = 1

        nMissed = NoRESP - NoRESP_fault

        nCorr = trials.data['StimResp.corr'].sum() #.std(), .mean() also available

        temp_nCorr = StimRespCorr[0]
        #for j in temp_nCorr:
        #   if j == 1:
        #        nCorr_fault = 1
        if temp_nCorr == 1:
            nCorr_fault = 1
        else:
            nCorr_fault = 0

        nCorr = nCorr - nCorr_fault

        nWrong = 22-nMissed-nCorr

        HitRate = (nCorr)/22*100

        #msg = " Correct Trials = %i trials \n Wrong Trials = %i \n Hit rate = %.2f" %(nCorr, nWrong, HitRate)

        PartiNum = expInfo['participant']
        PartiNum = int(PartiNum)

        check = PartiNum%2

        if check == 0:
            nCorr = nWrong
            nWrong = 22-nMissed-nCorr
            HitRate = (nCorr)/22*100

        msg = " Correct Trials = %i trials \n Wrong Trials = %i \n Missed trials = %i \n Hit rate = %.2f" %(nCorr, nWrong, nMissed, HitRate)
  Routine Welcome
    EnvGratingComponent Background_1
      beat = False
      carrier = None
      color = $[-1.000,-1.000,-1.000]
      contrast = 0.5
      envelope = sin
      envori = 0.0
      envphase = 0.0
      envsf = 1.0
      moddepth = 1.0
      saveStartStop = False
      sf = 1.0
      size = (20)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent text_2
      color = $[1.000,1.000,1.000]
      letterHeight = 0.12
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Welcome to the Auditory One Back Task (PRACTICE)!
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Inst
    EnvGratingComponent Background_2
      beat = False
      carrier = None
      color = $[-1.000,-1.000,-1.000]
      contrast = 0.5
      envelope = sin
      envori = 0.0
      envphase = 0.0
      envsf = 1.0
      moddepth = 1.0
      saveStartStop = False
      sf = 1.0
      size = (20)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent text
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $InstKey
      wrapWidth = 1.5
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        PartiNum = expInfo['participant']
        PartiNum = int(PartiNum)

        KeyList = ['N','V']

        check = PartiNum%2

        if check == 0:
            Key = KeyList[0]
            # Even Target = N
            InstKey = 'You will hear numbers read aloud, one number at a time.\n\nWhen the number heard matches the last number presented, press the N key.\n\nWhen the number heard does NOT match the last number presented, press the V key.\n\nPlease try to respond as accurately and as fast as possible.\n\nYou can start responding at the SECOND number you hear onwards. \n\nPress SPACEBAR to begin.'
        else:
            Key = KeyList[1]
            # Odd Target = v
            InstKey = 'You will hear numbers read aloud, one number at a time.\n\nWhen the number heard matches the last number presented, press the V key.\n\nWhen the number heard does NOT match the last number presented, press the N key.\n\nPlease try to respond as accurately and as fast as possible.\n\nYou can start responding at the SECOND number you hear onwards. \n\nPress SPACEBAR to begin.'
  Routine BreakMessage
    EnvGratingComponent Background_5
      beat = False
      carrier = None
      color = $[-1.000,-1.000,-1.000]
      contrast = 0.5
      envelope = sin
      envori = 0.0
      envphase = 0.0
      envsf = 1.0
      moddepth = 1.0
      saveStartStop = False
      sf = 1.0
      size = (20)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent BreakMsg
      color = $[1.000,1.000,1.000]
      letterHeight = 0.12
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Take a break!
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    KeyboardComponent BreakResp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine End
    EnvGratingComponent Background_6
      beat = False
      carrier = None
      color = $[-1.000,-1.000,-1.000]
      contrast = 0.5
      envelope = sin
      envori = 0.0
      envphase = 0.0
      envsf = 1.0
      moddepth = 1.0
      saveStartStop = False
      sf = 1.0
      size = (20)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent text_4
      color = $[1.000,1.000,1.000]
      letterHeight = 0.12
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        End of the Auditory One Back Task (PRACTICE)!


        Thank you for your participation!
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Feedback
    EnvGratingComponent Background_4
      beat = False
      carrier = None
      color = $[-1.000,-1.000,-1.000]
      contrast = 0.5
      envelope = sin
      envori = 0.0
      envphase = 0.0
      envsf = 1.0
      moddepth = 1.0
      saveStartStop = False
      sf = 1.0
      size = (20)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent text_3
      color = $[1.000,1.000,1.000]
      letterHeight = 0.12
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg 
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Welcome
  Routine Inst
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = OneBackCond-practice.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      "[{u'CorrAns': None, u'Stim': 3L, u'TrialNum': 1L, u'Target': None, u'BlockNum': 1L},
      {u'CorrAns': 'v', u'Stim': 3L, u'TrialNum': 2L, u'Target': 'T', u'BlockNum': 1L},
      {u'CorrAns': 'v', u'Stim': 3L, u'TrialNum': 3L, u'Target': 'T', u'BlockNum': 1L},
      {u'CorrAns': 'n', u'Stim': 2L, u'TrialNum': 4L, u'Target': 'NT', u'BlockNum': 1L},
      {u'CorrAns': 'n', u'Stim': 7L, u'TrialNum': 5L, u'Target': 'NT', u'BlockNum': 1L},
      {u'CorrAns': 'n', u'Stim': 3L, u'TrialNum': 6L, u'Target': 'NT', u'BlockNum': 1L},
      {u'CorrAns': 'n', u'Stim': 4L, u'TrialNum': 7L, u'Target': 'NT', u'BlockNum': 1L},
      {u'CorrAns': 'v', u'Stim': 4L, u'TrialNum': 8L, u'Target': 'T', u'BlockNum': 1L},
      {u'CorrAns': 'n', u'Stim': 6L, u'TrialNum': 9L, u'Target': 'NT', u'BlockNum': 1L},
      {u'CorrAns': 'v', u'Stim': 6L, u'TrialNum': 10L, u'Target': 'T', u'BlockNum': 1L},
      {u'CorrAns': 'n', u'Stim': 3L, u'TrialNum': 11L, u'Target': 'NT', u'BlockNum': 1L},
      {u'CorrAns': 'v', u'Stim': 3L, u'TrialNum': 12L, u'Target': 'T', u'BlockNum': 1L},
      {u'CorrAns': 'n', u'Stim': 7L, u'TrialNum': 13L, u'Target': 'NT', u'BlockNum': 1L},
      {u'CorrAns': 'n', u'Stim': 9L, u'TrialNum': 14L, u'Target': 'NT', u'BlockNum': 1L},
      {u'CorrAns': 'n', u'Stim': 5L, u'TrialNum': 15L, u'Target': 'NT', u'BlockNum': 1L},
      {u'CorrAns': 'v', u'Stim': 5L, u'TrialNum': 16L, u'Target': 'T', u'BlockNum': 1L},
      {u'CorrAns': 'n', u'Stim': 9L, u'TrialNum': 17L, u'Target': 'NT', u'BlockNum': 1L},
      {u'CorrAns': 'n', u'Stim': 8L, u'TrialNum': 18L, u'Target': 'NT', u'BlockNum': 1L}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
    Routine Block1
  LoopTerminator trials
  Routine Feedback
  Routine BreakMessage
  Routine End
