PsychoPy2experiment version="3.1.2"
Settings
  Experiment info = {u'Gender': u'', u'Age': u'', u'participant': u'', u'Ethnic': u''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1366, 768]
  color = $[1,1,1]
  expName = ThreeBack_Digits
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Routines
  Routine Block3
    EnvGratingComponent Background_8
      beat = False
      carrier = None
      color = $[-1.000,-1.000,-1.000]
      contrast = 0.5
      envelope = sin
      envori = 0.0
      envphase = 0.0
      envsf = 1.0
      moddepth = 1.0
      saveStartStop = False
      sf = 1.0
      size = (20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      units = norm
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    TextComponent Fixation_3
      color = $[1.000,1.000,1.000]
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    SoundComponent Stimulus_3
      sound [set every repeat] = $Stim
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.75
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    KeyboardComponent StimResp_3
      allowedKeys = 'v','n'
      correctAns = $CorrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      storeCorrect = True
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    CodeComponent code_4
      Code Type = Py
      End Routine:
        NoRESP = 0
        nCorr_fault = 0
        NoRESP_fault = 0
        string1 = ""
        StimRespCorr = trials3.data['StimResp_3.corr']
        StimRespRT = trials3.data['StimResp_3.keys']

        for i in StimRespRT:
            if not i:
                NoRESP = NoRESP + 1

        #test for Non-numeric values & convert them to 0 for first 3 trials
        temp_NoResp1 = StimRespRT[0]
        temp_NoResp2 = StimRespRT[1]
        temp_NoResp3 = StimRespRT[2]

        if temp_NoResp1 == None:
            temp_NoResp1 = 0
        else:
            temp_NoResp1 = temp_NoResp1

        if not temp_NoResp2 == string1:
            temp_NoResp2 = 0
        else:
            temp_NoResp2 = temp_NoResp2

        if not temp_NoResp3 == string1:
            temp_NoResp3 = 0
        else:
            temp_NoResp3 = temp_NoResp3

        #for k in temp_NoResp:
        #    if not k:
        #        NoRESP_fault = 0
        #    else:
        #        NoRESP_fault = 1
        if temp_NoResp1 > 0:
            NoRESP_fault = 0
        else:
            NoRESP_fault = 1

        if temp_NoResp2 > 0:
            NoRESP_fault = NoRESP_fault
        else:
            NoRESP_fault = NoRESP_fault + 1

        if temp_NoResp3 > 0:
            NoRESP_fault = NoRESP_fault
        else:
            NoRESP_fault = NoRESP_fault + 1

        nMissed = NoRESP - NoRESP_fault

        nCorr = trials3.data['StimResp_3.corr'].sum() #.std(), .mean() also available

        temp_nCorr1 = StimRespCorr[0]
        temp_nCorr2 = StimRespCorr[1]
        temp_nCorr3 = StimRespCorr[2]

        #for j in temp_nCorr:
        #   if j == 1:
        #        nCorr_fault = 1

        if temp_nCorr1 == 1:
            nCorr_fault = 1
        else:
            nCorr_fault = 0

        if temp_nCorr2 == 1:
            nCorr_fault = nCorr_fault + 1
        else:
            nCorr_fault = nCorr_fault

        if temp_nCorr3 == 1:
            nCorr_fault = nCorr_fault + 1
        else:
            nCorr_fault = nCorr_fault

        nCorr = nCorr - nCorr_fault

        nWrong = 24-nMissed-nCorr

        HitRate = (nCorr)/24*100

        msg = " Correct Trials = %i trials \n Wrong Trials = %i \n Missed trials = %i \n Hit rate = %.2f" %(nCorr, nWrong, nMissed, HitRate)
        #msg = " Correct Trials = %i trials \n Wrong Trials = %i \n Hit rate = %.2f" %(nCorr, nWrong, HitRate)
  Routine Block2
    EnvGratingComponent Background_7
      beat = False
      carrier = None
      color = $[-1.000,-1.000,-1.000]
      contrast = 0.5
      envelope = sin
      envori = 0.0
      envphase = 0.0
      envsf = 1.0
      moddepth = 1.0
      saveStartStop = False
      sf = 1.0
      size = (20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      units = norm
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    TextComponent Fixation_2
      color = $[1.000,1.000,1.000]
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    SoundComponent Stimulus_2
      sound [set every repeat] = $Stim
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.75
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    KeyboardComponent StimResp_2
      allowedKeys = 'v','n'
      correctAns = $CorrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      storeCorrect = True
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    CodeComponent code_3
      Code Type = Py
      End Routine:
        NoRESP = 0
        nCorr_fault = 0
        NoRESP_fault = 0
        string1 = ""
        StimRespCorr = trials2.data['StimResp_2.corr']
        StimRespRT = trials2.data['StimResp_2.keys']

        for i in StimRespRT:
            if not i:
                NoRESP = NoRESP + 1

        #test for Non-numeric values & convert them to 0 for first 3 trials
        temp_NoResp1 = StimRespRT[0]
        temp_NoResp2 = StimRespRT[1]
        temp_NoResp3 = StimRespRT[2]

        if temp_NoResp1 == None:
            temp_NoResp1 = 0
        else:
            temp_NoResp1 = temp_NoResp1

        if not temp_NoResp2 == string1:
            temp_NoResp2 = 0
        else:
            temp_NoResp2 = temp_NoResp2

        if not temp_NoResp3 == string1:
            temp_NoResp3 = 0
        else:
            temp_NoResp3 = temp_NoResp3

        #for k in temp_NoResp:
        #    if not k:
        #        NoRESP_fault = 0
        #    else:
        #        NoRESP_fault = 1
        if temp_NoResp1 > 0:
            NoRESP_fault = 0
        else:
            NoRESP_fault = 1

        if temp_NoResp2 > 0:
            NoRESP_fault = NoRESP_fault
        else:
            NoRESP_fault = NoRESP_fault + 1

        if temp_NoResp3 > 0:
            NoRESP_fault = NoRESP_fault
        else:
            NoRESP_fault = NoRESP_fault + 1

        nMissed = NoRESP - NoRESP_fault

        nCorr = trials2.data['StimResp_2.corr'].sum() #.std(), .mean() also available

        temp_nCorr1 = StimRespCorr[0]
        temp_nCorr2 = StimRespCorr[1]
        temp_nCorr3 = StimRespCorr[2]

        #for j in temp_nCorr:
        #   if j == 1:
        #        nCorr_fault = 1

        if temp_nCorr1 == 1:
            nCorr_fault = 1
        else:
            nCorr_fault = 0

        if temp_nCorr2 == 1:
            nCorr_fault = nCorr_fault + 1
        else:
            nCorr_fault = nCorr_fault

        if temp_nCorr3 == 1:
            nCorr_fault = nCorr_fault + 1
        else:
            nCorr_fault = nCorr_fault

        nCorr = nCorr - nCorr_fault

        nWrong = 24-nMissed-nCorr

        HitRate = (nCorr)/24*100

        msg = " Correct Trials = %i trials \n Wrong Trials = %i \n Missed trials = %i \n Hit rate = %.2f" %(nCorr, nWrong, nMissed, HitRate)
        #msg = " Correct Trials = %i trials \n Wrong Trials = %i \n Hit rate = %.2f" %(nCorr, nWrong, HitRate)
  Routine Block1
    EnvGratingComponent Background_3
      beat = False
      carrier = None
      color = $[-1.000,-1.000,-1.000]
      contrast = 0.5
      envelope = sin
      envori = 0.0
      envphase = 0.0
      envsf = 1.0
      moddepth = 1.0
      saveStartStop = False
      sf = 1.0
      size = (20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      units = norm
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    TextComponent Fixation
      color = $[1.000,1.000,1.000]
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    SoundComponent Stimulus
      sound [set every repeat] = $Stim
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.75
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    KeyboardComponent StimResp
      allowedKeys = 'v','n'
      correctAns = $CorrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      storeCorrect = True
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        myWB = ['ThreeBackCond.xlsx','ThreeBackCond-2.xlsx','ThreeBackCond-3.xlsx','ThreeBackCond-4.xlsx','ThreeBackCond-5.xlsx','ThreeBackCond-6.xlsx']

        import random

        #SheetSelect = random.choice(myWB)

        PartiNum = expInfo['participant']
        PartiNum = int(PartiNum)

        n = PartiNum%6

        #if PartiNum == u'1':
        #    SheetSelect = myWB[0]
        #elif PartiNum == u'2':
        #    SheetSelect = myWB[1]
        #elif PartiNum == u'3':
        #    SheetSelect = myWB[2]
        #elif PartiNum == u'4':
        #    SheetSelect = myWB[3]
        #elif PartiNum == u'5':
        #    SheetSelect = myWB[4]
        #elif PartiNum == u'6';
        #    SheetSelect = myWB[5]

        if n == 1:
            SheetSelect = myWB[0]
        elif n == 2:
            SheetSelect = myWB[1]
        elif n == 3:
            SheetSelect = myWB[2]
        elif n == 4:
            SheetSelect = myWB[3]
        elif n == 5:
            SheetSelect = myWB[4]
        elif n == 0:
            SheetSelect = myWB[5]

        t1 = slice(0,27)
        t2 = slice(27,54)
        t3 = slice(54,81)

        msg='doh!'#if this comes up we forgot to update the msg!
      End Routine:
        NoRESP = 0
        nCorr_fault = 0
        NoRESP_fault = 0
        string1 = ""
        StimRespCorr = trials.data['StimResp.corr']
        StimRespRT = trials.data['StimResp.keys']

        for i in StimRespRT:
            if not i:
                NoRESP = NoRESP + 1

        #test for Non-numeric values & convert them to 0 for first 3 trials
        temp_NoResp1 = StimRespRT[0]
        temp_NoResp2 = StimRespRT[1]
        temp_NoResp3 = StimRespRT[2]

        if temp_NoResp1 == None:
            temp_NoResp1 = 0
        else:
            temp_NoResp1 = temp_NoResp1

        if not temp_NoResp2 == string1:
            temp_NoResp2 = 0
        else:
            temp_NoResp2 = temp_NoResp2

        if not temp_NoResp3 == string1:
            temp_NoResp3 = 0
        else:
            temp_NoResp3 = temp_NoResp3

        #for k in temp_NoResp:
        #    if not k:
        #        NoRESP_fault = 0
        #    else:
        #        NoRESP_fault = 1
        if temp_NoResp1 > 0:
            NoRESP_fault = 0
        else:
            NoRESP_fault = 1

        if temp_NoResp2 > 0:
            NoRESP_fault = NoRESP_fault
        else:
            NoRESP_fault = NoRESP_fault + 1

        if temp_NoResp3 > 0:
            NoRESP_fault = NoRESP_fault
        else:
            NoRESP_fault = NoRESP_fault + 1

        nMissed = NoRESP - NoRESP_fault

        nCorr = trials.data['StimResp.corr'].sum() #.std(), .mean() also available

        temp_nCorr1 = StimRespCorr[0]
        temp_nCorr2 = StimRespCorr[1]
        temp_nCorr3 = StimRespCorr[2]

        #for j in temp_nCorr:
        #   if j == 1:
        #        nCorr_fault = 1

        if temp_nCorr1 == 1:
            nCorr_fault = 1
        else:
            nCorr_fault = 0

        if temp_nCorr2 == 1:
            nCorr_fault = nCorr_fault + 1
        else:
            nCorr_fault = nCorr_fault

        if temp_nCorr3 == 1:
            nCorr_fault = nCorr_fault + 1
        else:
            nCorr_fault = nCorr_fault

        nCorr = nCorr - nCorr_fault

        nWrong = 24-nMissed-nCorr

        HitRate = (nCorr)/24*100

        msg = " Correct Trials = %i trials \n Wrong Trials = %i \n Missed trials = %i \n Hit rate = %.2f" %(nCorr, nWrong, nMissed, HitRate)
        #msg = " Correct Trials = %i trials \n Wrong Trials = %i \n Hit rate = %.2f" %(nCorr, nWrong, HitRate)
  Routine Welcome
    EnvGratingComponent Background_1
      beat = False
      carrier = None
      color = $[-1.000,-1.000,-1.000]
      contrast = 0.5
      envelope = sin
      envori = 0.0
      envphase = 0.0
      envsf = 1.0
      moddepth = 1.0
      saveStartStop = False
      sf = 1.0
      size = (20)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent text_2
      color = $[1.000,1.000,1.000]
      letterHeight = 0.12
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Welcome to the Auditory Three Back Task!
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Inst
    EnvGratingComponent Background_2
      beat = False
      carrier = None
      color = $[-1.000,-1.000,-1.000]
      contrast = 0.5
      envelope = sin
      envori = 0.0
      envphase = 0.0
      envsf = 1.0
      moddepth = 1.0
      saveStartStop = False
      sf = 1.0
      size = (20)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent text
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $InstKey
      wrapWidth = 1.5
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        PartiNum = expInfo['participant']
        PartiNum = int(PartiNum)

        KeyList = ['N','V']

        check = PartiNum%2

        if check == 0:
            Key = KeyList[0]
            # Even Target = N
            InstKey = 'You will hear numbers read aloud, one number at a time.\n\nWhen the number heard matches the number presented three numbers back, press the N key. For example, if the fourth number is the same as the first number, press the N key at the fourth number.\n\nWhen the number heard does NOT match the number presented three numbers back, press the V key.\n\nPlease try to respond as accurately and as fast as possible.\n\nYou can start responding at the FOURTH number you hear onwards. \n\nPress SPACEBAR to begin.'
        else:
            Key = KeyList[1]
            # Odd Target = v
            InstKey = 'You will hear numbers read aloud, one number at a time.\n\nWhen the number heard matches the number presented three numbers back, press the V key. For example, if the fourth number is the same as the first number, press the V key at the fourth number.\n\nWhen the number heard does NOT match the number presented three numbers back, press the N key.\n\nPlease try to respond as accurately and as fast as possible.\n\nYou can start responding at the FOURTH number you hear onwards. \n\nPress SPACEBAR to begin.'
  Routine BreakMessage
    EnvGratingComponent Background_5
      beat = False
      carrier = None
      color = $[-1.000,-1.000,-1.000]
      contrast = 0.5
      envelope = sin
      envori = 0.0
      envphase = 0.0
      envsf = 1.0
      moddepth = 1.0
      saveStartStop = False
      sf = 1.0
      size = (20)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent BreakMsg
      color = $[1.000,1.000,1.000]
      letterHeight = 0.12
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Take a break!
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    KeyboardComponent BreakResp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine End
    EnvGratingComponent Background_6
      beat = False
      carrier = None
      color = $[-1.000,-1.000,-1.000]
      contrast = 0.5
      envelope = sin
      envori = 0.0
      envphase = 0.0
      envsf = 1.0
      moddepth = 1.0
      saveStartStop = False
      sf = 1.0
      size = (20)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent text_4
      color = $[1.000,1.000,1.000]
      letterHeight = 0.12
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        End of the Auditory Three Back Task!


        Thank you for your participation!
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Feedback
    EnvGratingComponent Background_4
      beat = False
      carrier = None
      color = $[-1.000,-1.000,-1.000]
      contrast = 0.5
      envelope = sin
      envori = 0.0
      envphase = 0.0
      envsf = 1.0
      moddepth = 1.0
      saveStartStop = False
      sf = 1.0
      size = (20)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent text_3
      color = $[1.000,1.000,1.000]
      letterHeight = 0.12
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg 
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Welcome
  Routine Inst
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = $t1
    conditionsFile = $SheetSelect
    loopType = sequential
    nReps = 1
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    Routine Block1
  LoopTerminator trials
  Routine Feedback
  Routine BreakMessage
  Routine Inst
  LoopInitiator trials2 loopType="TrialHandler"
    Selected rows = $t2
    conditionsFile = $SheetSelect
    loopType = sequential
    nReps = 1
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    Routine Block2
  LoopTerminator trials2
  Routine Feedback
  Routine BreakMessage
  Routine Inst
  LoopInitiator trials3 loopType="TrialHandler"
    Selected rows = $t3
    conditionsFile = $SheetSelect
    loopType = sequential
    nReps = 1
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    Routine Block3
  LoopTerminator trials3
  Routine Feedback
  Routine End
